PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Foreperiod_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Welcome_Screen
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    TextComponent Welcome_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome the study! When the + appears, prepare to click. When the ! appears click with your mouse as quickly as possible
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Debug_Text
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    UnknownComponent Debug_Text_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        ri = np.random.normal(0.75,0.2,1)
        pc = np.random.randint(100, size=1)
        tn = np.random.randint(3, size=1)
  Routine SURPRISE
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    UnknownComponent SURPRISE_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine Trial_2
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import serial
        import time

        # Initialize the serial port (you may need to change the 'COM3' to match your setup)
        port = serial.Serial('COM4', baudrate=115200)

        # Define a function to send a trigger
        def send_trigger(trigger_code):
            port.write(trigger_code.to_bytes(1, 'big'))  # Send the trigger code as a byte
            time.sleep(0.01)  # Pause to ensure the trigger is sent

        trial_number = 0
        break_text = 'You have reached a break. Tell the experimenter when you are ready to continue'
        import random
        percent = 0
        stim_dur = 0
        message = 'none'
        task = 'task'
        randint = 0
        avgrsp = 'N/A'
        rspnum = 0
        rsptot = 0
        percent = random.randint(1,100)
        trigger_f = 1
        trigger_p = 4


        if percent <= 90:
            task = 'normal'
        if percent > 90:
            task = 'surprise'
        if task == 'surprise':
            stim_dur = random.uniform(1, 1.5)
            trigger_f = 7
            trigger_p = 8
            mouse_trigger = [0x09]
        if task == 'normal':
            randint = random.randint(1,2)
            if randint == 1:
                stim_dur = 0.5
                trigger_f = 1
                trigger_p = 2
                mouse_trigger = [0x03]
            if randint == 2:
                stim_dur = 2
                trigger_f = 4
                trigger_p = 5
                mouse_trigger = [0x06]
      Begin Routine:
        polygon_pulse_started = False
        plus_pulse_started = False





        percent = random.randint(1,100)

        if percent <= 90:
            task = 'normal'
        if percent > 90:
            task = 'surprise'
        if task == 'surprise':
            stim_dur = random.uniform(1, 1.5)
            trigger_f = 7
            trigger_p = 8
            mouse_trigger = [0x09]
        if task == 'normal':
            randint = random.randint(1,2)
            if randint == 1:
                stim_dur = 0.5
                trigger_f = 1
                trigger_p = 2
                mouse_trigger = [0x03]
            if randint == 2:
                stim_dur = 2
                trigger_f = 4
                trigger_p = 5
                mouse_trigger = [0x04]
      Each Frame:
        if polygon.status == STARTED and not polygon_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, trigger_p.to_bytes(1, 'big'))
            stimulus_pulse_start_time = globalClock.getTime()
            polygon_pulse_started  = True

        if PLUS_FP.status == STARTED and not plus_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, trigger_f.to_bytes(1, 'big'))
            stimulus_pulse_start_time = globalClock.getTime()
            plus_pulse_started  = True
      End Routine:
        RT = mouse.time[0]-stim_dur
        thisExp.addData("FixDur", stim_dur)
        thisExp.addData("Type", task)
        thisExp.addData("RT", RT)
    PolygonComponent PLUS_FP
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $stim_dur
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    PolygonComponent polygon
      fillColor = white
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = stim_dur
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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    PolygonComponent Photodiode_polygon
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = stim_dur
      stopVal [duration (s)] = .01
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    PolygonComponent Photodiode_plus
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
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  Routine Trial_1
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    UnknownComponent Trial_3
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Foreperiod
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    PolygonComponent polygon_3
      fillColor = white
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = $Foreperiod
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $Foreperiod
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Foreperiod
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  Routine ITI
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    UnknownComponent ITI_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine Intertrial_Period
    RoutineSettingsComponent Intertrial_Period
      stopVal [duration (s)] = pause_dur
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [condition] = mouse.time[0]<stim_dur
      stopVal [duration (s)] = stim_dur
      text [set every frame] = $'You clicked too early, please wait for the the arrow to appear before clicking '
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        port.write(mouse_trigger)

        pause_dur = random.uniform(1.2,1.7)
        rspnum += 1
        rsptot += mouse.time[0]-stim_dur
        if avgrsp == 'N/A':
            avgrsp = mouse.time[0]-stim_dur
        else:
            avgrsp = (rsptot+mouse.time[0]-stim_dur)/rspnum
    PolygonComponent Photodiode_2
      fillColor = white
      pos = (.735, -0.44)
      shape = rectangle
      size = (0.11, 0.11)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
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    MouseComponent Intertrial_Mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine BREAK
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $break_text
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trial_number += 1
        if trial_number == 8:
            break_text = 'you have finished the task, please press space to exit'
Flow
  Routine Welcome_Screen
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine Trial_2
      Routine Intertrial_Period
    LoopTerminator trials_2
    Routine BREAK
  LoopTerminator trials_3
